<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>/blue/djlemas/xinsongdu/jupyter_notebook/projects/RUMP/work/fe/2c0e4afacde26d3db0114b9a14d70b/NEG_HumanVSBovine/QE2_jdg_242_Lemas_13[LAB_13]n.mzXML</file>
            <file>/blue/djlemas/xinsongdu/jupyter_notebook/projects/RUMP/work/fe/2c0e4afacde26d3db0114b9a14d70b/NEG_HumanVSBovine/QE2_jdg_242_Lemas_20[LAB_20]n.mzXML</file>
            <file>/blue/djlemas/xinsongdu/jupyter_notebook/projects/RUMP/work/fe/2c0e4afacde26d3db0114b9a14d70b/NEG_HumanVSBovine/QE2_jdg_242_Lemas_17[LAB_17]n.mzXML</file>
            <file>/blue/djlemas/xinsongdu/jupyter_notebook/projects/RUMP/work/fe/2c0e4afacde26d3db0114b9a14d70b/NEG_HumanVSBovine/QE2_jdg_242_Lemas_18[LAB_18]n.mzXML</file>
            <file>/blue/djlemas/xinsongdu/jupyter_notebook/projects/RUMP/work/fe/2c0e4afacde26d3db0114b9a14d70b/NEG_HumanVSBovine/QE2_jdg_242_Lemas_5[LAB_05]n.mzXML</file>
            <file>/blue/djlemas/xinsongdu/jupyter_notebook/projects/RUMP/work/fe/2c0e4afacde26d3db0114b9a14d70b/NEG_HumanVSBovine/QE2_jdg_242_Lemas_19[LAB_19]n.mzXML</file>
            <file>/blue/djlemas/xinsongdu/jupyter_notebook/projects/RUMP/work/fe/2c0e4afacde26d3db0114b9a14d70b/NEG_HumanVSBovine/QE2_jdg_242_Lemas_8[LAB_08]n.mzXML</file>
            <file>/blue/djlemas/xinsongdu/jupyter_notebook/projects/RUMP/work/fe/2c0e4afacde26d3db0114b9a14d70b/NEG_HumanVSBovine/QE2_jdg_242_Lemas_9[LAB_09]n.mzXML</file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogrambuilder.ChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min time span (min)">0.06</parameter>
        <parameter name="Min height">100000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms-1E5</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename suffix">smoothed</parameter>
        <parameter name="Filter width">5</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Local minimum search">
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            <module name="Local minimum search">
                <parameter name="Chromatographic threshold">0.95</parameter>
                <parameter name="Search minimum in RT range (min)">0.2</parameter>
                <parameter name="Minimum relative height">0.05</parameter>
                <parameter name="Minimum absolute height">30000.0</parameter>
                <parameter name="Min ratio of peak top/edge">3.0</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.06</min>
                    <max>1.0</max>
                </parameter>
            </module>
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        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false"/>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false"/>
        <parameter name="Remove original feature list">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.05</parameter>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">20.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.2</parameter>
        <parameter name="Weight for RT">15.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.PeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.25</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.3</parameter>
        <parameter name="RT correction">false</parameter>
        <parameter name="Parallel (never combined with RT correction)">false</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.05</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_adductsearch.AdductSearchModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="RT tolerance" type="absolute">0.05</parameter>
        <parameter name="Adducts">
            <adduct mass_difference="21.9825" name="[M+Na-H]" selected="true"/>
            <adduct mass_difference="37.9559" name="[M+K-H]" selected="true"/>
            <adduct mass_difference="21.9694" name="[M+Mg-2H]" selected="true"/>
            <adduct mass_difference="17.0265" name="[M+NH3]" selected="true"/>
            <adduct mass_difference="97.9769" name="[M+H3PO4]" selected="true"/>
            <adduct mass_difference="97.9674" name="[M+H2SO4]" selected="true"/>
            <adduct mass_difference="62.0004" name="[M+H2CO3]" selected="true"/>
            <adduct mass_difference="5.0" name="[(Deuterium)]glycerol" selected="true"/>
        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Max relative adduct peak height">0.4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_complexsearch.ComplexSearchModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Ionization method">[M-H]-</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.05</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Max complex peak height">0.4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_customdbsearch.CustomDBSearchModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Database file">
            <current_file>negative_library.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Field order">
            <item>ID</item>
            <item>m/z</item>
            <item>Retention time (min)</item>
            <item>Identity</item>
            <item>Formula</item>
        </parameter>
        <parameter name="Ignore first line">false</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.2</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>neg_data.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
            <item>Export row identity (main ID)</item>
            <item>Export row identity (all IDs)</item>
            <item>Export row identity (main ID + details)</item>
            <item>Export row comment</item>
            <item>Export row number of detected peaks</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak status</item>
            <item>Peak name</item>
            <item>Peak m/z</item>
            <item>Peak RT</item>
            <item>Peak RT start</item>
            <item>Peak RT end</item>
            <item>Peak duration time</item>
            <item>Peak height</item>
            <item>Peak area</item>
            <item>Peak charge</item>
            <item>Peak # data points</item>
            <item>Peak FWHM</item>
            <item>Peak tailing factor</item>
            <item>Peak asymmetry factor</item>
            <item>Peak m/z min</item>
            <item>Peak m/z max</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>